CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<channelnumber>.*)-d-(?P<imagename>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'AB1': 'imagename', 'AB2': 'imagename', 'Cytoplasm': 'imagename', 'Nucleus': 'imagename'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channelnumber "C1")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channelnumber "C2")
    Name to assign these images:AB1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channelnumber "C3")
    Name to assign these images:Cytoplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channelnumber "C4")
    Name to assign these images:AB2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nucleus
    Name the primary objects to be identified:NucleusObject
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:NucleusObject
    Name the objects to be identified:CytoplasmObject
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cytoplasm
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:AB1, AB2
    Select objects to measure:CytoplasmObject, NucleusObject

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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