CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<channelnumber>.*)-421-(?P<imagename>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'membrane': 'imagename', 'AB': 'imagename'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channelnumber "C1")
    Name to assign these images:membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channelnumber "C4")
    Name to assign these images:AB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:membrane
    Name the output image:MembraneThreshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:MembraneThreshold
    Name the output object:MembraneObject
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskImage:[module_num:7|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
    Select the input image:AB
    Name the output image:NonMemMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:MembraneObject
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:8|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
    Select images to measure:NonMemMasked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:9|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
    Select images to measure:AB
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:MembraneObject
    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:test3
    Overwrite existing files without warning?:No
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