// Batch convert LSM files to colour composite and RGB
//
// This macro batch converts.lsm files to RGB and composite TIFF's
// Using the channel colours from the LSM
//

// Ask user for source and destination folders
// Source = dir1 and should only contain .lsm files
// Destination = dir2 and should be different to dir1 and empty
dir1 = getDirectory("Choose Source Directory ");
dir2 = getDirectory("Choose Destination Directory ");

// Create a list of files in the source folder dir1
list = getFileList(dir1);

// Set batch processing mode, false = show processing, true = blank screen
setBatchMode(false);

// Create for next loop for number of files (list.length) in source folder (dir1) = i
for (i=0; i<list.length; i++) 
{
showProgress(i+1, list.length);

// Open file number i from dir1
s = "open=["+dir1+list[i]+"] autoscale color_mode=Grayscale rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT";
run("Bio-Formats Importer", s);


run("Blue");
Stack.setChannel(2);
run("Blue");
Stack.setChannel(3);
run("Red");
Stack.setChannel(4);
run("Green");
Stack.setDisplayMode("composite");
Stack.setActiveChannels("0111");
run("RGB Color", "slices keep");


run("Scale Bar...", "width=100 height=12 font=42 color=White background=None location=[Lower Right] bold");


saveAs("Tiff",  dir2+list[i]+"_BGXR.tif");

// Tidy up
close();
close();

// Next image 
}
