// Batch convert LSM files to colour composite and RGB
//
// This macro batch converts.lsm files to RGB and composite TIFF's
// Using the channel colours from the LSM
//

// Ask user for source and destination folders
// Source = dir1 and should only contain .lsm files
// Destination = dir2 and should be different to dir1 and empty
dir1 = getDirectory("Choose Source Directory ");
dir2 = getDirectory("Choose Destination Directory ");

// Create a list of files in the source folder dir1
list = getFileList(dir1);

// Set batch processing mode, false = show processing, true = blank screen
setBatchMode(true);

// Create for next loop for number of files (list.length) in source folder (dir1) = i
for (i=0; i<list.length; i++) 
{
showProgress(i+1, list.length);

// Open file number i from dir1
s = "open=["+dir1+list[i]+"] autoscale color_mode=Grayscale rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT";
run("Bio-Formats Importer", s);


getDimensions(width, height, channels, slices, frames);
// if it's a multi channel image
if (channels > 1) run("Split Channels");

// now we save all the generated images as tif in the output_dir
ch_nbr = nImages ; 


		for ( c = 1 ; c <= ch_nbr ; c++){
			selectImage(c);
			currentImage_name = getTitle();
			saveAs("tiff", dir2+currentImage_name);
		}
		// make sure to close every images befores opening the next one
		run("Close All");







// Next image 
}

setBatchMode(false);